# Generated by Configurator on Thu Mar 15 15:15:14 EDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM17,SerialManager,COM17
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,ArduinoValveControl,FreeSerialPort,FreeSerialPort

# Pre-init settings for devices
Property,ArduinoValveControl,Port,COM17

# Pre-init settings for COM ports
Property,COM17,AnswerTimeout,500.0000
Property,COM17,BaudRate,9600
Property,COM17,DelayBetweenCharsMs,0.0000
Property,COM17,Handshaking,Off
Property,COM17,Parity,None
Property,COM17,StopBits,1
Property,COM17,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

